\ 			C O M M E N T S 
 
\ CRF 60 Trial 90 Minutes 
\ Eric Teboul 7/31/2017 
\ Laura Benoit 28Sep17
\ Written for RNAC boxes. Check inputs and outputs 

\only save W variable to data file*******
DISKFORMAT = 13
DISKVARS = A,E,O,R,W     
DISKCOLUMNS = 1 

\*********** INPUTS ************* 
^headIN = 4        \  IR head entry detector
^NoseThing = 3 	  \  Nose port head entry detector 
^LLever = 2       \  left lever press
^RLever = 1       \  right lever press


\*********** OUTPUTS ************* 
^leftlever = 8 
^rightlever = 7 
^leftlight = 5
^rightlight = 4
^NoseThingLight = 2
^dipper = 6       \ On Liquid Dipper
^house = 1         \houselight 


\  VARIABLES USED IN THIS PROGRAM
\  (a) = correct for different delays left 1-5; right 6-10
\   b = delay times, selected from list h
\   c = reinf retrieved left
\   d = right vs left, selected from list g
\  (e) = dim (trials, lcorr, rcorr)
\   f = right vs left for dipper
\   g = right vs left lever random list
\   h = delay durations
\   i = ITI
\   j = ITI duration, selected from list i
\  (k) = session duration clock 
\   l = left dippers 
\   m = time something???
\   n = nose pokes 
\  (o) = trial duration clock, latency clock 
\   p = general counter 
\   q = right dippers
\  (r) = incorrect for different delays left 1-5; right 6-10
\   s = reinf retrieved right
\   t = master timer 
\   u =  
\   v = allow trial clock to restart
\  (w) = time and event code for matlab 
\   x = head entry
\   y =  
\   z =


\  \  SHOW POSITIONS
\  1 = Session time (minutes)  
\  2 = Trial Counter 
\  3 = Trial Time 
\  4 = Left correct
\  5 = Right correct 
\  6 = Left dippers
\  7 = Right dippers
\  8 = Mean latency sample lever to choice lever
\  9 = Left reinf retrieved
\ 10 = Right reinf retrieved 
\ 11 = Head entries
\ 12 = Nosepokes
\ 13 = Mean latency 2nd nosepoke to choice lever
\ 14 = Left incorrect
\ 15 = Right incorrect
\ 16 = 2s Left Correct
\ 17 = 4s Left Correct
\ 18 = 8s Left Correct
\ 19 = 12s Left Correct
\ 20 = 16s Left Correct
\ 21 = 2s Left Incorrect
\ 22 = 4s Left Incorrect
\ 23 = 8s Left Incorrect
\ 24 = 12s Left Incorrect
\ 25 = 16s Left Incorrect
\ 26 = 2s Right Correct
\ 27 = 4s Right Correct
\ 28 = 8s Right Correct
\ 29 = 12s Right Correct
\ 30 = 16s Right Correct
\ 31 = 2s Right Incorrect
\ 32 = 4s Right Incorrect
\ 33 = 8s Right Incorrect
\ 34 = 12s Right Incorrect
\ 35 = 16s Right Incorrect
\ 36 = Total latency sample lever to choice lever
\ 37 = Total latency 2nd nosepoke to choice lever

\======================================================
\ MATLAB standardized codes
\ *** = used in this program

^Feed1 = 0021
^Feed2 = 0022
^Feed3 = 0023
^Feed4 = 0024
^DipOn = 0025   \***
^DipOff = 0026   \***
^LLeverOn = 0027 \***
^RLeverOn= 0028  \***
^LLeverOff = 0029 \***
^RLeverOff = 0030 \***
^LightOff1 = 0031
^LightOff2 = 0032
^LightOff3 = 0033
^LightOff4 = 0034
^LightOn1 = 0041
^LightOn2 = 0042
^LightOn3 = 0043
^LightOn4 = 0044
^ToneOff1 = 0051
^ToneOff2 = 0052
^ToneOff3 = 0053
^ToneOff4 = 0054
^ToneOn1 = 0061
^ToneOn2 = 0062
^ToneOn3 = 0063
^ToneOn4 = 0064
^WNoiseOff1 = 0071
^WNoiseOff2 = 0072
^WNoiseOff3 = 0073
^WNoiseOff4 = 0074
^WNoiseOn1 = 0081
^WNoiseOn2 = 0082
^WNoiseOn3 = 0083
^WNoiseOn4 = 0084
^NoseThingON = 0085
\^NoseThing = 0086
\^NoseThingLight = 0087
^NoseThingOFF = 0088 
^NoseThingLightOFF = 0089
^NoseThingLightON = 0090  
^LDipOn = 0091   
^LDipOff = 0092 
^RDipOn = 0093 
^RDipOff = 0094 
^LeftLeverOFF = 0095 
^RightLeverOFF = 0096
^rretrievedleft = 0097
^rretrievedright = 0098 

^StartTrial = 0111
^EndTrial = 0112
^StartSession = 0113  \***
^EndSession = 0114   \***
^HouseLightOff = 0115
^HouseLightOn = 0116

^StartIti = 0121
^EndIti = 0122
^LightOffStan = 0201
^LightOnStan = 0202
^LightOffComp = 0203
^LightOnComp = 0204
^LightOffCtrl = 0205
^LightOnCtrl = 0206
^FeedStan = 0207
^FeedComp = 0208
^StartStanFlash = 0209
^StopStanFlash = 0211
^StartCompFlash = 0212
^StopCompFlash = 0213
^STNonGapNonProbe = 0214
^STNonGapProbe = 0215
^STGapNonProbe = 0216
^STGapProbe = 0217

^ProbeTrial = 0221
^AutoTrial = 0222

^PokeOff1 = 1001
^PokeOff2 = 1002
^PokeOff3 = 1003
^PokeOff4 = 1004
^PokeOn1 = 1011
^PokeOn2 = 1012
^PokeOn3 = 1013
^PokeOn4 = 1014
^LPressOn = 1015
^RPressOn = 1016
^LPressOff = 1017
^RPressOff = 1018
^PokeOffStan = 1301
^PokeOnStan = 1302
^PokeOffComp = 1303
^PokeOnComp = 1304
^PokeOffCtrl = 1305
^PokeOnCtrl = 1306


\================================================================


\Dimensionalize Event and Time code array
dim w=10000
dim a=10
dim e=5
dim k=4
dim r=10 
dim o=13

\list of delay durations (in hundredths of seconds) *change this to change delay durations
list h = 200, 400, 800, 1600

\ITI duration list (in hundredths of seconds)
list i = 1000

\list of alternate lever options at start of new trial 
list g = 1, 2 


\===============================
\   Z-PULSES USED IN THIS PROGRAM
\ z1  = right dipper delivery
\ z2  = nosepoke start trial entry to start sample lever release
\ z3  = shut down after required trials 
\ z4  = left reinf retrieved
\ z5  = right reinf retrieved
\ z6  = left dipper delivery  
\ z7  = second noseport on
\ z8  = choice lever release
\ z9  = start ITI 
\ z12 = restart trial clock  
\ z13 = correct left different delays
\ z14 = correct right different delays
\ z15 = incorrect left different delays
\ z16 = incorrect right different delays
\ z17 = sample lever hit
\ z18 = choice lever hit
\ z19 = noseport timed out
\=============================== 

s.s.1,  \MATLAB TIMER "T"
s1,
        0": SET p = -1; set m = 1--->s2
s2,
        .01": SET T = T + 100000 --->sx \Keeps time in 100th of a second

S.S.3,    \INITIALIZE
s1,
    #start:    add p; set w(p)= ^StartSession+T;--->s2
s2,
    #z3: off^NoseThing; off^NoseThingLight; 
         add p; set w(p) = ^NoseThingOff+T;
         add p; set w(p) = ^NoseThingLightoff+T; --->s3
\\    150': off^NoseThing; off^NoseThingLight; 
\\         add p; set w(p) = ^NoseThingOff+T;
\\         add p; set w(p) = ^NoseThingLightoff+T; --->s3
s3,
    10": OFF^house; add p; set w(p) = ^HouseLightOFF+T;    
        add p; set w(p)= ^EndSession + T;
        add p; set w(p)=-987.987;--->stopabortflush


S.S.2,    \Trials, First noseport
s1,
     #START: ---> s2

s7,
     .01": randd j=i ---> s2

s2, 
     j#t:  z12; set v=1;
             on^house; add p; set w(p)= ^HouseLightON+T; 
	     on^NoseThingLight; add p; set w(p) = ^NoseThingLightON+T; 
	     on^NoseThing; add p; set w(p) = ^NoseThingON+T; 
	     set e(1)=e(1)+1; show 2, Trials, e(1); ---> s3 
s3, 
     #R^NoseThing: add n; show 12, Nose Pokes, n; z2;
		   add p; set w(p) = ^Nosething+T;  ---> s4
s4, 
     0.25": Off^NoseThing; off^NoseThingLight; ---> s5

s5, 
     #z9: off^house; add v; 
	  add p; set w(p) = ^HouseLightOFF+T;   
		   if e(1)>159 [@end, @more]
                       @end: z3 --->s1
           	       @more: randd j=i ---> s2 

S.S.7 \Sample Lever Release 
s1, 
     #z2: randd d=g; if d=1 [@yes, @no] 
	   @yes: on^leftlever; add p; set w(p)= ^LLeveron+T; ---> s2 
	   @no: on^rightlever; add p; set w(p)= ^RLeveron+T; ---> s2 
s2, 
     #R^LLever: z17; set f=1; add p; set w(p) = ^LPressOn+T; ---> s3 
     #R^RLever: z17; set f=2; add p; set w(p) = ^RPressOn+T; ---> s3 

s3, 
     0.25": z7;
	    if f=1, [@yes, @no] 
	        @yes: off^leftlever; add p; set w(p)=^leftleverOFF+T ---> s1 
	        @no:  off^rightlever; add p; set w(p)=^rightleverOFF+T ---> s1   	 

S.S.9 \Second Noseport after delay
s1,
     #z7: ---> s5

s5,
     .01": randd b=h;---> s2

s2,
     b#t: on^NoseThingLight; add p; set w(p) = ^NoseThingLightON+T; 
	  on^NoseThing; add p; set w(p) = ^NoseThingON+T; ---> s3

s3,
     #R^NoseThing: add n; show 12, Nose Pokes, n; z8;
		   add p; set w(p) = ^Nosething+T; ---> s4
     5": z9; z19; off^NoseThing; off^NoseThingLight; ---> s1

s4,
     .25": off^NoseThing; off^NoseThingLight; ---> s1

S.S.14 \Choice lever release
s1,
     #z8: on^LeftLever; 
	  	add p; set w(p)= ^LLeverOn+T;
          on^RightLever; 
	  	add p; set w(p)= ^RLeverOn+T; --->s2

s2,
    #R^LLever: z18; add p; set w(p)= ^LPressOn+T; if f=1 [@same, @different]
        @same: z15; set e(4)=e(4)+1; show 14, L_Inc, e(4); --->s3
        @different: z6; z14; set e(3)=e(3)+1; show 5, R_Corr, e(3);--->s4
    #R^RLever: z18; add p; set w(p)= ^RPressOn+T;if f=2 [@same, @different]
        @same: z16; set e(5)=e(5)+1; show 15, R_Inc, e(5); --->s3
        @different: z1; z13; set e(2)=e(2)+1; show 4, L_Corr, e(2); --->s4

s3,
    .25": off^LeftLever; 
		add p; set w(p)= ^LLeverOff+T;
          off^RightLever; 
		add p; set w(p)= ^RLeverOff+T; 
	  z9; --->s1

s4,
    .25": off^LeftLever;
		add p; set w(p) = ^LLeveroff+T;
          off^RightLever; 
		add p; set w(p)= ^RLeverOff+T; --->s1   
 
S.S.6,  \Head Entry (Input 3) COUNTER
s1,
     #START:--->S2
s2,
     #R^headIN: add x; show 11, HE, x; 
                 add p; set w(p) = ^PokeOn1 + T---> sx


S.S.5, \Dipper Delivery Left 
s1,
     #z1:   ON^dipper; z4; add p;set w(p)=^LdipON+T;
               add l;Show 6, LDippers, l; --->s2
s2,
     5":    OFF^dipper;add p;set w(p)=^LDipOff+T; z9 --->s1 

S.S.11, \Dipper Delivery Right 
s1,
     #z6:   ON^dipper; z5; add p;set w(p)=^RdipON+T;
               add q;Show 7, RDippers, q; --->s2
s2,
     5":    OFF^dipper;add p;set w(p)=^RDipOff+T; z9 --->s1 

S.S.12, \ Reinf Retr right 
s1, 
	#z5: ---> s2 
s2, 
	#R^headIN: add s; show 10, RReinfRetr, s;
	add p; set w(p)=^rretrievedright+T; ---> s3 
s3, 
	#z9: ---> s1 

S.S.13, \ Reinf Retr left 
s1, 
	#z4: ---> s2 
s2, 
	#R^headIN: add c; show 9, LReinfRetr, c;
	add p; set w(p)=^rretrievedleft+T; ---> s3 
s3, 
	#z9: ---> s1 
    
    
S.S.8, \Session Duration Clock
s1,
    #start:--->s2
s2,
    1":    set k(0)=k(0)+.01; if k(0)>.59 [@AddMin, @NoAdd]
            @AddMin: add k(1); set k(0)=0; set k(2)=k(0)+k(1);
                 show 1, Session, k(2)--->s2
            @NoAdd: set k(2)=k(0)+k(1); show 1, Session, k(2);--->s2

S.S.10, \Trial Duration Clock  
s1,
    #start:--->s2
s2,
    #z12: set o(0)=0; set o(1)=0; set o(2)=0; show 3, Trial Duration, o(2); --->s3 
s3, 
    1": if v<2 [@continue, @waitfortrial] 
   	    @continue: set o(0)=o(0)+.01; if o(0)>.59 [@AddMin, @NoAdd]
            		@AddMin: add o(1); set o(0)=0; set o(2)=o(0)+o(1);
                 		 show 3, Trial Duration, o(2); --->s3
            		@NoAdd: set o(2)=o(0)+o(1); show 3, Trial Duration, o(2) ---> s3 
	    @waitfortrial: set o(0)=o(0)+0; set o(1)=o(1)+0; set o(2)=o(2)+0 ---> s2



S.S.15, \Mean latency sample lever to choice lever
s1,
    #z17: ---> s2

s2,
    1":  set o(4)=o(4)+.01; if o(4)>.59 [@AddMin, @NoAdd]
	  @AddMin: add o(5); set o(4)=0; set o(6)=o(4)+o(5); show 36, Total L-L lat, o(6); ---> s2
	  @NoAdd: set o(6)=o(4)+o(5); show 36, Total L-L lat, o(6); ---> s2
    #z18: set o(7)=o(6)/(e(2)+e(3)+e(4)+e(5)); show 8, L-L latency, o(7);
	  set o(12)=o(7)*100; ---> s1
    #z19: set o(6)=o(6)-.0526; show 36, Total L-L lat, o(6); 
	  if o(4)<.0526 [@o5, @o4]
		@o5: set o(5)=o(5)-1; set o(4)=o(4)+.59-.0526; ---> s1
		@o4: set o(4)=o(4)-.0526; ---> s1				


S.S.16, \Mean latency second noseport to choice lever
s1,
    #z8: ---> s2

s2,
    1":  set o(8)=o(8)+.01; if o(8)>.59 [@AddMin, @NoAdd]
	  @AddMin: add o(9); set o(8)=0; set o(10)=o(8)+o(9); show 37, Total N-L lat, o(10); ---> s2
	  @NoAdd: set o(10)=o(8)+o(9); show 37, Total N-L lat, o(10); ---> s2
    #z18: set o(11)=o(10)/(e(2)+e(3)+e(4)+e(5)); show 13, N-L latency, o(11);
	  set o(13)=o(11)*100; ---> s1


S.S.17 \Count correct left for different delays
s1,
   #z13: if b=200 [@2sec, @checkothers]
		@2sec: set a(1)=a(1)+1; show 16, 2_L_Corr, a(1);--->s1
		@checkothers: ---> s2

s2,
   0": if b=400 [@4sec, @checkothers]
		@4sec: set a(2)=a(2)+1; show 17, 4_L_Corr, a(2);--->s1
		@checkothers: ---> s3

s3,
   0": if b=800 [@8sec, @checkothers]
		@8sec: set a(3)=a(3)+1; show 18, 8_L_Corr, a(3);--->s1
		@checkothers: ---> s5

\\s4,
\\   0": if b=1200 [@12sec, @checkothers]
\\		@12sec: set a(4)=a(4)+1; show 19, 12_L_Corr, a(4);--->s1
\\		@checkothers: ---> s5

s5,
   0": if b=1600 [@16sec, @nexttrial]
		@16sec: set a(5)=a(5)+1; show 20, 16_L_Corr, a(5);--->s1
		@nexttrial: ---> s1

S.S.18 \Count correct right for different delays
s1,
   #z14: if b=200 [@2sec, @checkothers]
		@2sec: set a(6)=a(6)+1; show 26, 2_R_Corr, a(6);--->s1
		@checkothers: ---> s2

s2,
   0": if b=400 [@4sec, @checkothers]
		@4sec: set a(7)=a(7)+1; show 27, 4_R_Corr, a(7);--->s1
		@checkothers: ---> s3

s3,
   0": if b=800 [@8sec, @checkothers]
		@8sec: set a(8)=a(8)+1; show 28, 8_R_Corr, a(8);--->s1
		@checkothers: ---> s5

\\s4,
\\   0": if b=1200 [@12sec, @checkothers]
\\		@12sec: set a(9)=a(9)+1; show 29, 12_R_Corr, a(9);--->s1
\\		@checkothers: ---> s5

s5,
   0": if b=1600 [@16sec, @nexttrial]
		@16sec: set a(10)=a(10)+1; show 30, 16_R_Corr, a(10);--->s1
		@nexttrial: ---> s1


S.S.19 \Count incorrect left for different delays
s1,
   #z15: if b=200 [@2sec, @checkothers]
		@2sec: set r(1)=r(1)+1; show 21, 2_L_Inc, r(1);--->s1
		@checkothers: ---> s2

s2,
   0": if b=400 [@4sec, @checkothers]
		@4sec: set r(2)=r(2)+1; show 22, 4_L_Inc, r(2);--->s1
		@checkothers: ---> s3

s3,
   0": if b=800 [@8sec, @checkothers]
		@8sec: set r(3)=r(3)+1; show 23, 8_L_Inc, r(3);--->s1
		@checkothers: ---> s5

\\s4,
\\   0": if b=1200 [@12sec, @checkothers]
\\		@12sec: set r(4)=r(4)+1; show 24, 12_L_Inc, r(4);--->s1
\\		@checkothers: ---> s5

s5,
   0": if b=1600 [@16sec, @nexttrial]
		@16sec: set r(5)=r(5)+1; show 25, 16_L_Inc, r(5);--->s1
		@nexttrial: ---> s1

S.S.20 \Count incorrect right for different delays
s1,
   #z16: if b=200 [@2sec, @checkothers]
		@2sec: set r(6)=r(6)+1; show 31, 2_R_Inc, r(6);--->s1
		@checkothers: ---> s2

s2,
   0": if b=400 [@4sec, @checkothers]
		@4sec: set r(7)=r(7)+1; show 32, 4_R_Inc, r(7);--->s1
		@checkothers: ---> s3

s3,
   0": if b=800 [@8sec, @checkothers]
		@8sec: set r(8)=r(8)+1; show 33, 8_R_Inc, r(8);--->s1
		@checkothers: ---> s5

\\s4,
\\   0": if b=1200 [@12sec, @checkothers]
\\		@12sec: set r(9)=r(9)+1; show 34, 12_R_Inc, r(9);--->s1
\\		@checkothers: ---> s5

s5,
   0": if b=1600 [@16sec, @nexttrial]
		@16sec: set r(10)=r(10)+1; show 35, 16_R_Inc, r(10);--->s1
		@nexttrial: ---> s1



