\                        C O M M E N T S
\
\ Variable Time ITI ~mean 80 sec.
\ Dipper light (8s) followed by dipper (5s duration) --->iti
\
\ Session ends after 40 dipper presentations (or 80 minutes)
\ 10% of trials are not rewarded as a probe for "waiting"
\
\  Includes headin and headout event codes
\ ***PROGRAM REQUIRES INPUT 3 (HEAD ENTRY) BE SET TO CONTINUOUS MODE*****

\only save W, P variable to data file*******
DISKFORMAT = 13.1
DISKVARS = a, W    \"DISKVARS" only prints selected variables to datafile

                  \  Inputs ****************************
^headIN = 3       \  IR head entry detector

^LLever2 = 1       \  left lever press
^RLever2 = 2       \  right lever press


                  \  Outputs ****************************

^dipper = 3        \ On Liquid Dipper

^house = 7         \houselight

^dipLight = 9     \Blue LED dipper light

    \CONSTANTS***********************
^DipDuration = 5   \dipper up duration (sec)



\  VARIABLES USED IN THIS PROGRAM
\   a = array of poke latencies while dipper is up
\   b = counter of pokes while dipper is up
\   c = session clock (displayed in Column 1)
\   d = poke latency timer (reset with every trial)
\   e = # head entries per dipper, reset with each dip
\   f
\   g
\   h = ARRAY FOR HEAD ENTRY
\   i = list array of ITI durations
\   j = Number of dippers
\   k
\   l
\   m
\   n
\   o = reward or omission boolean
\   p = counter for w array
\   q = array for reward presentation to randomly reward 10% of trials
\   r = number of dippers retrieved
\   s
\   t
\   u
\   v
\  (w) = time and event code for matlab
\   x = ITI dur, selected from list i
\   y = head-in boolean
\   z (reserved)


\  SHOW POSITIONS
\  1 = Session Timer
\  2 = Dipper Timer
\  3 = dipper counter
\  4 =
\  5 = head entries
\  6 =


\======================================================
\ MATLAB standardized codes

^Feed1 = 0021

^DipOn = 0025
^DipOff = 0026

^DipLightOn = 1125
^DipLightOff = 1126

^StartTrial = 0111
^EndTrial = 0112

^StartSession = 0113
^EndSession = 0114

^HouseLightOff = 0115
^HouseLightOn = 0116

^ToneOn1 = 0061

^OmissionStart = 1000
^OmissionOver = 1111


^PokeOff1 = 1001
^PokeOn1 = 1011


\================================================================


\Dimensionalize Event and Time code array
dim a=100
dim w=10000
dim c=3

\ITI duration list (in hundredths of seconds)
list i = 440, 820, 1150, 1900, 3100, 3800, 4100, 4700, 5800, 6800, 7300, 8200, 8700, 9830, 11200, 13330, 14100, 16200, 18300, 20100
\
\ Y(1)/N(0) list for reward presentation or omission
list q = 1,1,1,1,1,1,1,1,1,0
\
\===============================
\   Z-PULSES USED IN THIS PROGRAM
\ z1 = dipper up (initiate timer D)
\===============================

s.s.1,  \MATLAB TIMER "T"
s1,
        0":     SET p = -1; set b = -1; set r = 0 --->s2
s2,
        .02":     SET T = T + 100000 --->sx  \Keeps time in 50th of a second

S.S.2,    \INITIALIZE
s1,
        #start:    ~initANL926;~;~SetRack (MG, 2);~;
                   ~SetAmp (MG,BOX, 90);~;~SetRF (MG,BOX, 10);~;~SetFreq (MG,BOX, 2500);~;

                   ON^house; add p; set w(p)= ^HouseLightOn + T---> s2
s2,
        80':    --->s3
    #z4:     --->s3
s3,
    .01":    OFF^house;add p; set w(p) = ^HouseLightOff + T;

                add p; set w(p)= ^EndSession + T;
                add p; set w(p)=-987.987;
                add b; set a(b)= -99;
                add b; set a(b) = -987.987--->stopabortflush

s.s.3,  \Reinforcer controller - Dippers
s1,
        #start:    add p; set w(p)= ^StartSession+T;set x=100 --->s2
s2,
    x#T:     randd x=i;
        ON^dipLight; add p; set w(p)=T+^DipLightOn ---> s3
s3,
           8":  add p;  set w(p)=T+^DipLightOff;   OFF^dipLight; randd o=q; ---> s4

s4,
    0":  if o>0 [@giveReward, @omission]
                 @giveReward: ON^dipper;z1;add p; set w(p)=T+^DipON--->s5
             @omission: add p; set w(p)=T+^OmissionStart --->s6

s5,
    5": z2; OFF^dipper; add p; set w(p)=T+^DipOff --->s7

s6,
    10": add p; set w(p)=T+^OmissionOver --->s7

s7,
    0.05":  add j;show 3, Dippers,j;
        if j = 40[@end, @noend]   \Change Here for Different # of Dippers
                      @end: z4 --->s1
                      @noend: --->s2



S.S.4,  \Head Entry (Input 3) COUNTER
S1,
    #START:SHOW 5,HeadIn,0; set g=0; --->S2
S2,
    #R^headIN:  add p; set w(p)=^PokeOn1+T;add g; SHOW 5,HeadIn,g; z10 ---> s3

s3,
    #z8 ---> s2


s.s.5,  \Head still in checker part 1
s1,
    #z10 --->s2   \Z10 gets called when head first enters

s2,
    0": z9 ---> s3

s3,
    0.05": if y>0 [@headSTILLin, @headExit]
        @headSTILLin: set y=0; ---> s2
        @headEXIT: z8; add p; set w(p)=^PokeOff1+T;---> s1



s.s.6, \Head still in checker part 2
s1,
    #z9: --->s2

s2,
    #R^headIN: set y=1; --->s3
s3,
   0": --->s1





s.s.7,  \Dipper Up Timer (D variable)
s1,
    #z1:     set d=0--->s2
s2,
    0.1":    set d=d+0.1;show 2,DipUpTime,d--->sx
    #z2:    --->s1


s.s.8, \latency to first head poke after reinforcer
s1,
    #z1:--->s2
s2,
    #R^headIN: set b=b+1;set a(b)=d;add r; SHOW 4, DipsRetr, r --->s3
s3,
    #z2:--->s1




S.S.9, \Session Duration Clock
s1,
    #start:--->s2
s2,
    1":    set c(0)=c(0)+.01; if c(0)>.59 [@AddMin, @NoAdd]
            @AddMin: add c(1); set c(0)=0; set c(2)=c(0)+c(1); show 1, Session, c(2) --->s2
            @NoAdd: set c(2)=c(0)+c(1); show 1, Session, c(2)--->s2

